CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['seperate 4 channels to gray (gray channel needed for object recognition)']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
    Select the input image:Original
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Cell_Membrane
    Channel number:2
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    Image name:Organelle
    Channel number:3
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    Image name:Nuclei
    Channel number:4
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    Image name:Organelle_Content

Smooth:[module_num:6|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notes:['Smooth nuclei for easier object ID']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
    Select the input image:Nuclei
    Name the output image:Smoothed_Nuclei
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
Threshold:[module_num:7|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notes:['increase threshold for easier Nuclei ID']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
    Select the input image:Smoothed_Nuclei
    Name the output image:Threshold_Nuclei
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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notes:['ID nuclei as objects']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
    Select the input image:Threshold_Nuclei
    Name the primary objects to be identified:Nuclei_Object
    Typical diameter of objects, in pixel units (Min,Max):50,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:100
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0, 1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Smooth:[module_num:9|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notes:['smooth the cell wall for easier identification, similarly to the smoothing for the nuclei.']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
    Select the input image:Cell_Membrane
    Name the output image:CM_Smoothed
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifySecondaryObjects:[module_num:10|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notes:['Identify cells using the nuclei identified previously. through propagation, the amount of cells is equal to the amount of nuclei.']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
    Select the input objects:Nuclei_Object
    Name the objects to be identified:Cells_Object
    Select the method to identify the secondary objects:Propagation
    Select the input image:CM_Smoothed
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.00,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyTertiaryObjects:[module_num:11|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notes:['create outline of cell walls.']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
    Select the larger identified objects:Cells_Object
    Select the smaller identified objects:Cells_Object
    Name the tertiary objects to be identified:CM_Object
    Shrink smaller object prior to subtraction?:Yes

RescaleIntensity:[module_num:12|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notes:['enhance VWF signal to make the image viewable after export.']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
    Select the input image:Organelle
    Name the output image:Rescale_Intensity_Organelle
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:13|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notes:['Further enhancing']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
    Select the input image:Rescale_Intensity_Organelle
    Name the output image:Speckles_Organelle
    Select the operation:Enhance
    Feature size:24
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:14|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notes:['further enhancing']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
    Select the input image:Speckles_Organelle
    Name the output image:Neurites_Organelle
    Select the operation:Enhance
    Feature size:8
    Feature type:Neurites
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    Smoothing scale:1.5
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    Enhancement method:Line structures
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    Rescale result image:Yes

IdentifyPrimaryObjects:[module_num:15|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notes:['Using the threshold to identify WPB as objects. finetuned to include long/thin WPB and short round WPB clustered together.']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
    Select the input image:Neurites_Organelle
    Name the primary objects to be identified:Organelle_Object
    Typical diameter of objects, in pixel units (Min,Max):2,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:50
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.34
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:25
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:16|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notes:['expand the WPB object by 2 pixels. This is performed because the WPB object is made based on the VWF signal, which is retained inside the WPB. The WPB protein of interest is present on the membrane of the WPB. therefore the WPB object is expanded to mask all organelle content signal present in and on the WPB.']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
    Select the input objects:Organelle_Object
    Name the output objects:Expanded_Organelle_Object
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
RescaleIntensity:[module_num:17|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notes:['rescale Organellecontent signal for easier control in the overlay']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
    Select the input image:Organelle_Content
    Name the output image:Rescale_Intensity_OC
    Rescaling method:Stretch each image to use the full intensity range
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
MaskImage:[module_num:18|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notes:['Mask the Organellecontent image using the WPB objects. So you create an image where the Organellecontent signal is only shown where WPB were identified as objects.']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
    Select the input image:Rescale_Intensity_OC
    Name the output image:OC_In_Organelle_Mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Expanded_Organelle_Object
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:19|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notes:['Measure Organellecontent signal (in WPB) as objects so they can be measured.']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
    Select the input image:OC_In_Organelle_Mask
    Name the primary objects to be identified:OC_In_Organelle_Object
    Typical diameter of objects, in pixel units (Min,Max):3,200
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:25
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    Thresholding method:Otsu

MaskImage:[module_num:20|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notes:['Mask the Organellecontent image using the WPB objects. So you create an image where the Organellecontent signal is only shown outside of the WPB objects']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
    Select the input image:Organelle_Content
    Name the output image:OC_Out_Organelle_Mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Expanded_Organelle_Object
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    Invert the mask?:Yes

MaskImage:[module_num:21|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notes:['Mask the earlier defined cell wall on the Organellecontent background. This is needed for later, per cell division.']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
    Select the input image:OC_Out_Organelle_Mask
    Name the output image:OC_Out_Organelle_Mask_Cell
    Use objects or an image as a mask?:Objects
    Select object for mask:CM_Object
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:22|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notes:['Measure Organellecontent signal (outside WPB) as objects so they can be measured. the smallest objects are excluded (these are likely gaps between wpb objects).']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
    Select the input image:OC_Out_Organelle_Mask_Cell
    Name the primary objects to be identified:OC_Out_Organelle_Object
    Typical diameter of objects, in pixel units (Min,Max):125,2000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:50
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:23|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notes:['']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
    Select images to measure:OC_In_Organelle_Mask, OC_Out_Organelle_Mask_Cell
    Select objects to measure:OC_In_Organelle_Object, OC_Out_Organelle_Object

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:Cells_Object, Organelle_Object
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:25|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notes:['create a relationship between the cells and the  Organellecontent objects within that cell. ']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
    Parent objects:Cells_Object
    Child objects:OC_In_Organelle_Object
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:26|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notes:['establish a relationship between the Outside of WPB, Organellecontent signal per cell.']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
    Parent objects:Cells_Object
    Child objects:OC_Out_Organelle_Object
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:27|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notes:['relate Cells to WPBs to calculate the distance between the WPB and the cell wall and the nuclei.']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
    Parent objects:Cells_Object
    Child objects:Organelle_Object
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:Yes
    Do you want to save the children with parents as a new object set?:No
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    Parent name:Nuclei_Object

OverlayOutlines:[module_num:28|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notes:['Creates a overlay of the WPB, cells, nucleus and enlarged nucleus objects on the Organellecontent signal as background. this allows easy check of the pipeline for all samples.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescale_Intensity_OC
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:Cells_Object
    Select outline color:Green
    Select objects to display:Organelle_Object
    Select outline color:Blue
    Select objects to display:Nuclei_Object

DisplayDataOnImage:[module_num:29|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
    Display object or image measurements?:Object
    Select the input objects:Cells_Object
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay
    Text color:#DE24FF
    Name the output image that has the measurements displayed:Overlay_Numbered
    Font size (points):40
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:30|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notes:['overlay made on Organellecontent is saved here. ']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
    Select the type of image to save:Image
    Select the image to save:Overlay_Numbered
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:31|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:xxx.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:CM_Object,OC_In_Organelle_Object,OC_Out_Organelle_Object,Organelle_Object
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:xxx
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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